PsychoPy2experiment version="2023.2.3"
Settings
  Experiment info = {'participant': '\'sub-\' + f"{randint(0, 99999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Use version = 2023.2.3
  Window size (pixels) = [1920, 1200]
  expName = random_dot
  keyboardBackend = ioHub
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Routines
  Routine instruction
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    TextComponent textInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Experiment.

        Im Folgenden werden Sie eine Reihe von Aufgaben lösen. Ihnen wird ein Kreis voller Punkte präsentiert. Einige dieser Punkte bewegen sich entweder nach links oder nach rechts. Ihre Aufgabe ist es, zu entscheiden, in welche Richtung sie sich bewegen.

        Drücken Sie die linke Pfeiltaste, wenn Sie glauben, dass sich die Punkte nach links bewegen, oder die rechte Pfeiltaste, wenn Sie glauben, dass sie sich nach rechts bewegen.

        Bitte konzentrieren Sie sich immer auf das kleine Kreuz auf dem Bildschirm, wenn nichts anderes angezeigt wird.

        Drücken Sie [ Leertaste ], um mit dem Übungsdurchgang zu beginnen, wenn Sie bereit sind.
    CodeComponent codeInstr
      Code Type = Auto->JS
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      Begin Experiment:
        win.color = 'black'
    KeyboardComponent respInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine speed_test_run
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    UnknownComponent speed_test_run_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    UnknownComponent speed_test_run_3
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine goodbye
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    TextComponent goodbye_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Sie sind am Ende angelangt.

        Vielen Dank, dass sie an diesem Experiment teilgenommen haben. :)
  Routine dots
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    CodeComponent codeDots
      Code Type = Py
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      Begin Routine:
        if direction == "right":
            dots_direction = 0
        elif direction == "left":
            dots_direction = 180
    PolygonComponent backgroundDots
      durationEstim = 1.5
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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    DotsComponent stimulusDots
      coherence = 0.08
      dir [set every repeat] = dots_direction
      dotLife = 3
      dotSize = 10
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 250
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.0125
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [time (s)] = 5
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    KeyboardComponent respDots
      allowedKeys = 'left', 'right'
      forceEndRoutine = True
      startEstim = 0
      startVal [time (s)] = 0.1
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  Routine feedback
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    CodeComponent codeFeedback
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if respDots.keys is None:
            response_text = "verpasst"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast' (like Mulder et al., 2012 did).
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif respDots.rt <= 0.1:
            response_text = "zu schnell"

        # If the response time was between 100ms and 1500ms (i.e. it was valid), give
        # feedback. If the repsonse was also correct, set the response text to '+5 points',
        # if it was wrong, set the response text to '+0 points'.
        # The variable 'direction' is a loop variable storing the stimulus direction for
        # the current trial.
        else:
            if (direction == "left" and respDots.keys == "left" or
                direction == "right" and respDots.keys == "right"
            ):
                response_text = "richtig"
            else:
                response_text = "falsch"
    TextComponent textFeedback
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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  Routine ITI
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    CodeComponent preFixcross
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        fixation_pre = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixcross
      letterHeight = 0.08
      startVal [time (s)] = $fixation_pre
      stopVal [duration (s)] = 0.8
      text = +
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  Routine instruction_1
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    CodeComponent codeInstr_2
      Code Type = Py
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      Begin Routine:
        #from psychopy import visual, core, event
        import random

        # Liste der beiden möglichen Anweisungen
        instructions = ['speed', 'accuracy']

        # Zufällige Auswahl einer Anweisung aus der Liste
        selected_instruction = random.choice(instructions)

        # Initialisiere die Variable instruction_text
        instruction_text = ""

        # Überprüfe, welche Anweisung ausgewählt wurde
        if selected_instruction == "speed":
            instruction_text = "Wir sind nun mit dem Übungsdurchgang fertig und werden zum Hauptexperiment übergehen. Bitte versuchen Sie so schnell wie möglich zu antworten. Drücken Sie [Leertaste], um das Experiment zu starten."
        elif selected_instruction == "accuracy":
            instruction_text = "Wir sind nun mit dem Übungsdurchgang fertig und werden zum Hauptexperiment übergehen. Bitte versuchen Sie so genau wie möglich zu antworten. Drücken Sie [Leertaste], um das Experiment zu starten."

        # Anzeige der Anweisung
        #print(instruction_text)
    TextComponent textSpeedInst
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      text [set every repeat] = $instruction_text
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    KeyboardComponent respSpeedInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine instruction_2
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    CodeComponent codeInstr_3
      Code Type = Py
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      Begin Routine:
        import random
        if selected_instruction == "accuracy":
            instruction_text_2 = "Wir sind nun mit dem ersten Hauptexperiment fertig und werden zum zweiten Hauptexperiment übergehen. Bitte versuchen Sie dieses Mal so schnell wie möglich zu antworten. Drücken Sie [Leertaste], um das Hauptexperiment zu starten."
        elif selected_instruction == "speed":
            instruction_text_2 = "Wir sind nun mit dem ersten Hauptexperiment fertig und werden zum zweiten Hauptexperiment übergehen. Bitte versuchen Sie dieses Mal so genau wie möglich zu antworten. Drücken Sie [Leertaste], um das zweite Hauptexperiment zu starten."
    TextComponent textAccuracyInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        $instruction_text_2
    KeyboardComponent respAccuracyInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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Flow
  Routine instruction
  LoopInitiator practice_run_loop loopType="TrialHandler"
    conditionsFile = random_dot_conditions.csv
    loopType = random
    nReps = 10
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    conditions:
      [OrderedDict([('direction', 'left'), ('corrAns', 'left')]),
      OrderedDict([('direction', 'right'), ('corrAns', 'right')])]
    Routine ITI
    Routine dots
    Routine feedback
  LoopTerminator practice_run_loop
  Routine instruction_1
  LoopInitiator first_run_loop loopType="TrialHandler"
    conditionsFile = random_dot_conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('direction', 'left'), ('corrAns', 'left')]),
      OrderedDict([('direction', 'right'), ('corrAns', 'right')])]
    Routine ITI
    Routine dots
  LoopTerminator first_run_loop
  Routine instruction_2
  LoopInitiator second_run_loop loopType="TrialHandler"
    conditionsFile = random_dot_conditions.csv
    loopType = random
    nReps = 20
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    conditions:
      [OrderedDict([('direction', 'left'), ('corrAns', 'left')]),
      OrderedDict([('direction', 'right'), ('corrAns', 'right')])]
    Routine ITI
    Routine dots
  LoopTerminator second_run_loop
  Routine goodbye
