PsychoPy2experiment version="2021.2.3"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1200]
  expName = rdk
  keyboardBackend = ioHub
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Routines
  Routine instruction
    TextComponent textInstr
      letterHeight = 0.02
      startVal [time (s)] = 0.0
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      text:
        Willkommen zum Experiment.

        Im Folgenden werden Sie eine Reihe von Aufgaben lösen. Ihnen wird ein Kreis voller Punkte präsentiert. Einige dieser Punkte bewegen sich entweder nach links oder nach rechts. Ihre Aufgabe ist es, zu entscheiden, in welche Richtung sie sich bewegen.

        Drücken Sie die linke Pfeiltaste, wenn Sie glauben, dass sich die Punkte nach links bewegen, oder die rechte Pfeiltaste, wenn Sie glauben, dass sie sich nach rechts bewegen.

        Bevor die Punkte erscheinen, sehen Sie auf dem Bildschirm einen Pfeil, der die wahrscheinlichste Bewegungsrichtung anzeigt. Zeigt der Pfeil nach rechts, bewegen sich die Punkte mit größerer Wahrscheinlichkeit nach rechts als nach links, und umgekehrt.

        Bitte konzentrieren Sie sich immer auf das kleine Kreuz auf dem Bildschirm, wenn nichts anderes angezeigt wird, und versuchen Sie, so schnell wie möglich zu reagieren.

        Drücken Sie [ Leertaste ], um mit dem Übungsdurchgang zu beginnen, wenn Sie bereit sind.
    CodeComponent codeInstr
      Code Type = Auto->JS
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      Begin Experiment:
        win.color = 'black'
    KeyboardComponent respInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine speed_instruction
    TextComponent textSpeedInst
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Wir sind nun mit den Übungsdurchgängen fertig und werden zum Hauptexperiment übergehen.

        Bitte versuchen Sie, so schnell wie möglich zu antworten.

        Drücken Sie [ Leertaste ], um das Hauptexperiment zu starten.
    KeyboardComponent respSpeedInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine speed_test_run
    UnknownComponent speed_test_run_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine accuracy_instruction
    TextComponent textAccuracyInstr
      letterHeight = 0.03
      startVal [time (s)] = 0.0
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      text:
        Wir sind nun mit dem ersten Hauptexperiment fertig. Sie werden nun zum zweitem Hauptexperiment übergehen.

        Bitte versuchen Sie diesesmal so richtig wie möglich zu antworten.

        Drücken Sie [ Leertaste ], um das zweite Hauptexperiment zu starten.
    KeyboardComponent respAccuracyInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine accuracy_test_run
    UnknownComponent accuracy_test_run_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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  Routine goodbye
    UnknownComponent goodbye_2
      backgroundFit = none
      color = $[0,0,0]
      colorSpace = rgb
      syncScreenRefresh = False
      useWindowParams = False
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    TextComponent goodbye_text
      letterHeight = 0.03
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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      text:
        Sie sind am Ende angelangt.

        Vielen Dank, dass sie an diesem Experiment teilgenommen haben. :)
  Routine dots
    CodeComponent codeDots
      Code Type = Py
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      Begin Routine:
        if direction == "right":
            dots_direction = 0
        elif direction == "left":
            dots_direction = 180
    PolygonComponent backgroundDots
      durationEstim = 1.5
      fillColor = black
      lineColor = black
      shape = circle
      size = (0.75, 0.75)
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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    DotsComponent stimulusDots
      coherence = 0.08
      dir [set every repeat] = dots_direction
      dotLife = 5
      dotSize = 10
      durationEstim = 1.5
      fieldPos = (0.0, 0.0)
      fieldShape = circle
      fieldSize = 0.75
      nDots = 250
      noiseDots = walk
      refreshDots = repeat
      signalDots = same
      speed = 0.01
      startEstim = 0
      startVal [frame N] = 0.0
      stopVal [duration (frames)] = 90
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    KeyboardComponent respDots
      allowedKeys = 'left', 'right'
      durationEstim = 1.5
      forceEndRoutine = True
      startEstim = 0
      startVal [frame N] = 0
      stopVal [duration (frames)] = 90
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  Routine feedback
    CodeComponent codeFeedback
      Code Type = Py
      Begin Routine:
        # If the participant did not respond at all, set the response text to 'miss'.
        # You can figure that out by checking whether the given response 'None'.
        # 'None' in Python means a values is not defined, so when
        # dots_main_keyboard_resp.keys is 'None' we know the participant did not respond.
        if respDots.keys is None:
            response_text = "verpasst"

        # If the response time (rt) was shorter than 100ms, set the response text to
        # 'too fast' (like Mulder et al., 2012 did).
        # You can get the response time from the Keyboard component that was used to
        # capture the response (name_of_the_keyboard_component.rt).
        elif respDots.rt <= 0.1:
            response_text = "zu schnell"

        # If the response time was between 100ms and 1500ms (i.e. it was valid), give
        # feedback. If the repsonse was also correct, set the response text to '+5 points',
        # if it was wrong, set the response text to '+0 points'.
        # The variable 'direction' is a loop variable storing the stimulus direction for
        # the current trial.
        else:
            if (direction == "left" and respDots.keys == "left" or
                direction == "right" and respDots.keys == "right"
            ):
                response_text = "richtig"
            else:
                response_text = "falsch"
    TextComponent textFeedback
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $response_text
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  Routine ITI
    CodeComponent preFixcross
      Code Type = Py
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      Begin Routine:
        # Before the fixation cross (the one before the cue) is displayed, randomly
        # choose a duration for it. Since we are using seconds as time unit, these
        # numbers correspond to 100ms, 350ms, 800ms and 1200ms.
        fixation_pre = randchoice([0.1, 0.35, 0.8, 1.2])
    TextComponent fixcross
      letterHeight = 0.08
      startVal [time (s)] = $fixation_pre
      stopVal [duration (s)] = 0.8
      text = +
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  Routine staircase_instruction
    TextComponent textStaircaseInstr
      letterHeight = 0.03
      startVal [time (s)] = 0
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      text:
        Aufgepasst, jetzt startet die Schwellenmessung.

        Drücken Sie die Leertaste, wenn Sie soweit sind.
    CodeComponent codeStaircaseInstr
      Code Type = Auto->JS
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      Begin Experiment:
        win.color = 'black'
    KeyboardComponent respStaircaseInstr
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 3
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  Routine participantID
    CodeComponent codeParticipantID
      Code Type = Py
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      Before Experiment:
        import time, string, random

        # sample 3 uppercase letters
        letters = np.random.choice(list(string.ascii_uppercase), 3)
        # convert characters into string
        letters = ''.join(letters)

        # take timestamp in seconds and convert to milliseconds
        timestamp = round(time.time() * 1000)
        # remove first 6 digits
        timestamp = int(str(timestamp)[6:])
        # concatenate letters and timestamp to create unique ID
        participant_id = letters + str(timestamp)
Flow
  Routine participantID
  Routine instruction
  LoopInitiator practice_run_loop loopType="TrialHandler"
    conditionsFile = rdk_conditions.csv
    loopType = random
    nReps = 8
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    conditions:
      [OrderedDict([('direction', 'left')]),
      OrderedDict([('direction', 'right')])]
    Routine ITI
    Routine dots
    Routine feedback
  LoopTerminator practice_run_loop
  Routine staircase_instruction
  LoopInitiator staircase_run_loop loopType="StairHandler"
    N down = 3
    N up = 1
    loopType = staircase
    max value = 1
    min value = 0
    nReps = 1
    start value = 0.5
    step sizes = [0.8,0.8,0.4,0.4,0.2]
    step type = log
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    Routine ITI
    Routine dots
  LoopTerminator staircase_run_loop
  Routine speed_instruction
  LoopInitiator speed_run_loop loopType="TrialHandler"
    conditionsFile = rdk_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direction', 'left')]),
      OrderedDict([('direction', 'right')])]
    Routine ITI
    Routine dots
  LoopTerminator speed_run_loop
  Routine accuracy_instruction
  LoopInitiator accuracy_run_loop loopType="TrialHandler"
    conditionsFile = rdk_conditions.csv
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('direction', 'left')]),
      OrderedDict([('direction', 'right')])]
    Routine ITI
    Routine dots
  LoopTerminator accuracy_run_loop
  Routine goodbye
